usegui = 1

{load_file("stdlib.hoc")}
{load_file("stdgui.hoc")}

create Soma1

access Soma1

celsius = 34

pt3dclear() 
pt3dadd(0.0, 0, 0.0, 13.4715) 
pt3dadd(0.0, 23.1694, 0.0, 13.4715)

define_shape()

Ra = 100
cm = 1.0 

insert pas 
{ g_pas = 0.000020 }
{ e_pas = -69.781406}    

insert NaTs2_t
{ gNaTs2_tbar_NaTs2_t = 0.395881 }
ena = 50 

insert SKv3_1
{ gSKv3_1bar_SKv3_1 = 0.260872 }
ek = -85 

insert Ca
{ gCabar_Ca = 0.000028 }

insert SK_E2
{ gSK_E2bar_SK_E2 = 0.002099 }

insert Ca_LVAst
{ gCa_LVAstbar_Ca_LVAst = 0.009728 }

insert Nap_Et2
{ gNap_Et2bar_Nap_Et2 = 0.000001 }

insert Im
{ gImbar_Im = 0.000032 }

insert K_Pst
{ gK_Pstbar_K_Pst = 0.000114 }

insert K_Tst
{ gK_Tstbar_K_Tst = 0.077616 }

insert CaDynamics_E2 
{ decay_CaDynamics_E2 = 967.678789 }
{ gamma_CaDynamics_E2 = 0.000814 }    


test_cond_dens =0.0000743567
insert StochKv_deterministic 
gmax_StochKv_deterministic = test_cond_dens





create Soma2

access Soma2

celsius = 34

pt3dclear() 
pt3dadd(0.0, 0, 0.0, 13.4715) 
pt3dadd(0.0, 23.1694, 0.0, 13.4715)

define_shape()

Ra = 100
cm = 1.0 

insert pas 
{ g_pas = 0.000020 }
{ e_pas = -69.781406}    

insert NaTs2_t
{ gNaTs2_tbar_NaTs2_t = 0.395881 }
ena = 50 

insert SKv3_1
{ gSKv3_1bar_SKv3_1 = 0.260872 }
ek = -85 

insert Ca
{ gCabar_Ca = 0.000028 }

insert SK_E2
{ gSK_E2bar_SK_E2 = 0.002099 }

insert Ca_LVAst
{ gCa_LVAstbar_Ca_LVAst = 0.009728 }

insert Nap_Et2
{ gNap_Et2bar_Nap_Et2 = 0.000001 }

insert Im
{ gImbar_Im = 0.000032 }

insert K_Pst
{ gK_Pstbar_K_Pst = 0.000114 }

insert K_Tst
{ gK_Tstbar_K_Tst = 0.077616 }

insert CaDynamics_E2 
{ decay_CaDynamics_E2 = 967.678789 }
{ gamma_CaDynamics_E2 = 0.000814 }    


test_cond_dens =0.0000743567

objref rng2
Soma2 {
    insert StochKv 
    gkbar_StochKv = 1e4*test_cond_dens
 //   gamma_StochKv = .1

    rng2 = new Random()
    rng2.MCellRan4( 1232, 123 )
    rng2.uniform(0,1)
    setdata_StochKv(0.5)
    setRNG_StochKv(rng2)
    ek = -85 
}


proc initialiseValues0() {

forall  v = -65

}

objref fih0
{fih0 = new FInitializeHandler(0, "initialiseValues0()")}

objref stim1
objref stim2 

amp = 0.0766542-0.008423
Soma1 {
    
    stim1 = new IClamp(0.5)
    stim1.del = 200.0
    stim1.dur = 200.0
    stim1.amp = amp
}

Soma2 {
    stim2 = new IClamp(0.5)
    stim2.del = 200.0
    stim2.dur = 200.0
    stim2.amp = amp
}

tstop = 500.0
dt = 0.01

objref v_time
objref f_time


objref Soma_v1
{ Soma_v1 = new Vector() }
{ Soma_v1.record(&Soma1.v(0.5))} 


objref GraphWin_0
objref GraphWin_1
objref GraphWin_2
objref GraphWin_3

if (usegui==1) {
    GraphWin_0 = new Graph(0)
    {GraphWin_0.size(0, tstop,-110.0,50.0)}
    {GraphWin_0.view(0, -90, tstop, 40, 80, 330, 330, 250)}
    {
        GraphWin_0.addexpr("v: Passive", "Soma1.v(0.5)", 1, 1, 0.8, 0.9, 2)
        GraphWin_0.addexpr("v: BBP", "Soma2.v(0.5)", 2, 1, 0.8, 0.9, 2)
        graphList[0].append(GraphWin_0)
    }

    GraphWin_1 = new Graph(0)
    {GraphWin_1.size(0, tstop,-0.1,1.1)}
    {GraphWin_1.view(0, -0.1, tstop, 1.2, 80, 330, 330, 250)}
    {
        GraphWin_1.addexpr("n:    NeuroML2 - deterministic", "Soma1.n_q_StochKv_deterministic(0.5)", 1, 1, 0.8, 0.9, 2)
        GraphWin_1.addexpr("N1/N: BBP", "Soma2.N1_StochKv(0.5)/Soma2.N_StochKv(0.5)", 2, 1, 0.8, 0.9, 2)
        graphList[0].append(GraphWin_1)
    }

    GraphWin_2 = new Graph(0)
    {GraphWin_2.size(0, tstop,-0.1,1.1)}
    {GraphWin_2.view(0, -0.1e-6, tstop, 14e-5, 80, 330, 330, 250)}
    {
        GraphWin_2.addexpr("g: NeuroML2 - deterministic", "Soma1.gion_StochKv_deterministic(0.5)", 1, 1, 0.8, 0.9, 2)
        GraphWin_2.addexpr("g: BBP", "Soma2.gk_StochKv(0.5)*1e-4", 2, 1, 0.8, 0.9, 2)
        graphList[0].append(GraphWin_2)
    }

}

{run()}



if (usegui==1) {
    //   This code pops up a simple Run Control

    {
    xpanel("RunControl", 0)
    v_init = -60.0
    xbutton("Init & Run","run()")
    xbutton("Stop","stoprun=1")
    t = 0
    xvalue("t","t", 2 )
    xvalue("Tstop","tstop", 1,"tstop_changed()", 0, 1 )
    dt = 0.01
     xvalue("dt","dt", 1,"setdt()", 0, 1 )
    xpanel(80,80)
    }
}

forall psection()
